# Generated by Configurator on Mon Jun 17 11:27:24 EDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Default
# Preset: Default
ConfigGroup,Default,Default,Andor sCMOS Camera,Exposure,100.0032
ConfigGroup,Default,Default,Andor sCMOS Camera,FrameRate,9.9987
ConfigGroup,Default,Default,Andor sCMOS Camera,PixelReadoutRate,540 MHz - fastest readout
ConfigGroup,Default,Default,Andor sCMOS Camera,TransposeCorrection,0
ConfigGroup,Default,Default,Andor sCMOS Camera,TransposeMirrorX,0
ConfigGroup,Default,Default,Andor sCMOS Camera,TransposeMirrorY,0
ConfigGroup,Default,Default,Andor sCMOS Camera,TransposeXY,0
ConfigGroup,Default,Default,Andor sCMOS Camera,Sensitivity/DynamicRange,12-bit (low noise)



# PixelSize settings

